PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1800, 1169]
  expName = dilemmi
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plCompanionAddress = neon.local
  plCompanionCameraCalibration = scene_camera.json
  plCompanionPort = 8080
  plCompanionRecordingEnabled = True
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = psychopy_iohub_surface
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Routines
  Routine tutorial
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    ImageComponent cross_tutorial
      image = images/cross.jpg
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent dilemma_1_tutorial
      image [set every repeat] = images/dilemma_controllo_main_tutorial.jpg
      startVal [time (s)] = 3
      stopVal [duration (s)] = 14
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    SoundComponent audio_1_tutorial
      sound [set every repeat] = audios/dilemma_controllo_main_tutorial.mp3
      startVal [time (s)] = 3
      stopVal [duration (s)] = 14
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    ImageComponent cross_2_tutorial
      image = images/cross.jpg
      startVal [time (s)] = 17
      stopVal [duration (s)] = 3
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    ImageComponent dilemma_2_tutorial
      image [set every repeat] = images/dilemma_controllo_choice_tutorial.jpg
      startVal [time (s)] = 20
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    SoundComponent audio_2_tutorial
      sound [set every repeat] = audios/dilemma_controllo_choice_tutorial.mp3
      startVal [time (s)] = 20
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    MouseComponent mouse_tutorial
      clickable = sx_tutorial, dx_tutorial
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 20
      storeCorrect = True
      syncScreenRefresh = True
      timeRelativeTo = experiment
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    ImageComponent sx_tutorial
      image [set every repeat] = images/sx.jpg
      pos = (-0.5, -0.25)
      size = (0.1, 0.1)
      startVal [time (s)] = 20
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    ImageComponent dx_tutorial
      image [set every repeat] = images/dx.jpg
      pos = (0.5, -0.25)
      size = (0.1, 0.1)
      startVal [time (s)] = 20
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  Routine dilemmi
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    ImageComponent cross_img
      image = images/cross.jpg
      startVal [condition] = $start_cross1
      stopVal [duration (s)] = $durata_cross_1
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    ImageComponent dilemma_1
      image [set every repeat] = $img_dilemma1
      startVal [time (s)] = $start_img1
      stopVal [duration (s)] = $durata_audio1
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    SoundComponent audio_1
      sound [set every repeat] = $audio_dilemma1
      startVal [time (s)] = $start_img1
      stopVal [duration (s)] = $durata_audio1
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    ImageComponent cross_img_2
      image = images/cross.jpg
      startVal [time (s)] = $start_cross2
      stopVal [duration (s)] = $durata_cross_2
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    ImageComponent dilemma_2
      image [set every repeat] = $img_dilemma2
      startVal [time (s)] = $start_dilemma2
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    SoundComponent audio_2
      sound [set every repeat] = $audio_dilemma2
      startVal [time (s)] = $start_dilemma2
      stopVal [duration (s)] = $durata_audio2
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    MouseComponent mouse
      clickable = sx, dx
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $start_dilemma2
      storeCorrect = True
      syncScreenRefresh = True
      timeRelativeTo = experiment
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    ImageComponent sx
      image [set every repeat] = images/sx.jpg
      pos = (-0.5, -0.25)
      size = (0.1, 0.1)
      startVal [time (s)] = $start_dilemma2
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    ImageComponent dx
      image [set every repeat] = images/dx.jpg
      pos = (0.5, -0.25)
      size = (0.1, 0.1)
      startVal [time (s)] = $start_dilemma2
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if trials.thisN != 2:
            continueRoutine == False
  Routine pause
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    ImageComponent image
      image = images/dilemma_controllo_main_7.jpg
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = image
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions
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Flow
  Routine instructions
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'img_dilemma1': 'images/dilemma_controllo_main_2.jpg', 'audio_dilemma1': 'audios/dilemma_controllo_main_2.mp3', 'img_dilemma2': 'images/dilemma_controllo_choice_2.jpg', 'audio_dilemma2': 'audios/dilemma_controllo_choice_2.mp3', 'start_cross2': 27, 'start_dilemma2': 30, 'durata_audio1': 24, 'durata_audio2': 3}]
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    Routine dilemmi
    Routine pause
  LoopTerminator trials
